PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.4
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-10,10))
            corrAns = 'down'
      End Routine:
        trials.addData('tilt', tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-10,10))
            corrAns = 'down'
  Routine rating
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How confident are you about your answer?
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        Dear participant,
        Please click the 'up arrow key' if the stimulus present in front of you is vertical. Please click the 'down arrow key' if the stimulus presented in front of you is tilted, either to left or right. After the selection, rate how confident you are about your answer on the 5 point likert scale.
  Routine Thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for your extraordinary patience. 
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 150
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    Routine trial
    Routine rating
  LoopTerminator trials
  Routine Thankyou
